CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:45
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "c03")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c00")
    Name to assign these images:CD25_Ki67
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c01")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "c02")
    Name to assign these images:Mitochondria
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
MeasureImageQuality:[module_num:5|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enabled:False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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:1
    Threshold count:1
    Select the images to measure:Actin, CD25_Ki67, DNA, Mitochondria
    Include the image rescaling value?:Yes
    Calculate blur metrics?:No
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    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:Yes
    Name the output image:Ki67_plus_MC
    Image or measurement?:Image
    Select the first image:Mitochondria
    Multiply the first image by:5
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    Image or measurement?:Image
    Select the second image:CD25_Ki67
    Multiply the second image by:10
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    Image or measurement?:Image
    Select the third image:Actin
    Multiply the third image by:20
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    Image or measurement?:Image
    Select the fourth image:DNA
    Multiply the fourth image by:1.0
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):10,80
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:20
    Suppress local maxima that are closer than this minimum allowed distance:20
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
IdentifyPrimaryObjects:[module_num:8|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enabled:False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
    Select the input image:CD25_Ki67
    Name the primary objects to be identified:Ki67
    Typical diameter of objects, in pixel units (Min,Max):5,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.001,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
IdentifyPrimaryObjects:[module_num:9|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enabled:False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
    Select the input image:Actin
    Name the primary objects to be identified:actin
    Typical diameter of objects, in pixel units (Min,Max):10,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:Never
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.004,1.0
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    Size of adaptive window:100
    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
    Thresholding method:Robust Background

IdentifyPrimaryObjects:[module_num:10|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enabled:False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
    Select the input image:Mitochondria
    Name the primary objects to be identified:MC
    Typical diameter of objects, in pixel units (Min,Max):20,100
    Discard objects outside the diameter range?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:Never
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:11|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
    Select the input objects:Nuclei
    Name the objects to be identified:cell_original
    Select the method to identify the secondary objects:Propagation
    Select the input image:Ki67_plus_MC
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:50
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    Thresholding method:Otsu

ExpandOrShrinkObjects:[module_num:12|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
    Select the input objects:cell_original
    Name the output objects:expCell
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
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
ExpandOrShrinkObjects:[module_num:13|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
    Select the input objects:expCell
    Name the output objects:cell
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:3
    Fill holes in objects so that all objects shrink to a single point?:Yes
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
IdentifyTertiaryObjects:[module_num:14|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enabled:False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
    Select the larger identified objects:cell
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RelateObjects:[module_num:15|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enabled:False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
    Parent objects:cell
    Child objects:Ki67
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:16|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enabled:False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
    Parent objects:cell
    Child objects:MC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:17|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enabled:False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
    Parent objects:cell
    Child objects:actin
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:18|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enabled:False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
    Parent objects:cell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
MeasureImageIntensity:[module_num:19|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enabled:False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
    Select images to measure:DNA
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cell
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

OverlayOutlines:[module_num:20|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Actin
    Name the output image:Cell_Actin
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:cell
    Select outline color:Green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:21|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:CD25_Ki67
    Name the output image:Cell_CD25_Ki67
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:cell
    Select outline color:Green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:22|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:Cell_DNA
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:cell
    Select outline color:Green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:23|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Mitochondria
    Name the output image:Cell_Mito
    Outline display mode:Color
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    How to outline:Outer
    Select outline color:Red
    Select objects to display:cell
    Select outline color:Green
    Select objects to display:Nuclei

MeasureImageIntensity:[module_num:24|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enabled:False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
    Select images to measure:Mitochondria
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cell
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureImageIntensity:[module_num:25|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enabled:False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
    Select images to measure:CD25_Ki67
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cell
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureImageIntensity:[module_num:26|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enabled:False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
    Select images to measure:Actin
    Measure the intensity only from areas enclosed by objects?:Yes
    Select input object sets:cell
    Calculate custom percentiles:Yes
    Specify percentiles to measure:10,90

MeasureObjectIntensity:[module_num:27|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enabled:False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
    Select images to measure:Mitochondria
    Select objects to measure:cell

MeasureObjectIntensity:[module_num:28|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enabled:False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
    Select images to measure:CD25_Ki67
    Select objects to measure:cell

MeasureObjectIntensity:[module_num:29|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enabled:False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
    Select images to measure:Actin
    Select objects to measure:cell

MeasureObjectIntensity:[module_num:30|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:cell

MeasureObjectIntensityDistribution:[module_num:31|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enabled:False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
    Select images to measure:Actin, CD25_Ki67, DNA, Mitochondria
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes only
    Maximum zernike moment:9
    Select objects to measure:cell
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:8
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
MeasureObjectSizeShape:[module_num:32|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enabled:False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
    Select object sets to measure:Cytoplasm, Nuclei, cell
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureColocalization:[module_num:33|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enabled:False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
    Select images to measure:Actin, CD25_Ki67, DNA, Mitochondria
    Set threshold as percentage of maximum intensity for the images:10.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei, cell
    Run all metrics?:Yes
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    Method for Costes thresholding:Fast

MeasureTexture:[module_num:34|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enabled:False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
    Select images to measure:DNA
    Select objects to measure:Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureTexture:[module_num:35|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enabled:False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
    Select images to measure:Mitochondria
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureTexture:[module_num:36|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enabled:False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
    Select images to measure:CD25_Ki67
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureTexture:[module_num:37|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enabled:False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
    Select images to measure:Actin
    Select objects to measure:cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:2

MeasureGranularity:[module_num:38|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notes:['To emphasise: please read this help advice.', '', '', '', 'If the textures of interest are larger than a few pixels, we recommend you subsample the image with a factor <1 to speed up the processing. Downsampling the image will let you detect larger structures with a smaller sized structure element. A factor >1 might increase the accuracy but also require more processing time. Images are typically of higher resolution than is required for granularity measurements, so the default value is 0.25. For low-resolution images, increase the subsampling fraction; for high-resolution images, decrease the subsampling fraction. Subsampling by 1/4 reduces computation time by (1/4) 3 because the size of the image is (1/4) 2 of original and the range of granular spectrum can be 1/4 of original. Moreover, the results are sometimes actually a little better with subsampling, which is probably because with subsampling the individual granular spectrum components can be used as features, whereas without subsampling a feature should be a sum of several adjacent granular spectrum components. The recommendation on the numerical value cannot be determined in advance; an analysis as in this reference may be required before running the whole set. See this pdf, slides 27-31, 49-50.']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enabled:False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
    Select images to measure:Mitochondria
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:1
    Radius of structuring element:1
    Range of the granular spectrum:12

MeasureGranularity:[module_num:39|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enabled:False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
    Select images to measure:CD25_Ki67
    Measure within objects?:Yes
    Select objects to measure:cell
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:1
    Radius of structuring element:1
    Range of the granular spectrum:12

MeasureGranularity:[module_num:40|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enabled:False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
    Select images to measure:DNA
    Measure within objects?:Yes
    Select objects to measure:Nuclei
    Subsampling factor for granularity measurements:1
    Subsampling factor for background reduction:1
    Radius of structuring element:1
    Range of the granular spectrum:12

ExportToSpreadsheet:[module_num:41|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enabled:False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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop/Julie/20230728_TCA/results_test_farm
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:MyExpt_
    Overwrite existing files without warning?:No
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
SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:Cell_Actin
    Select method for constructing file names:From image filename
    Select image name for file prefix:Actin
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Actin
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop/Pilot_Study/masks_V3_pipeline_3h
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:Cell_CD25_Ki67
    Select method for constructing file names:From image filename
    Select image name for file prefix:CD25_Ki67
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CD25_Ki67
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop/Pilot_Study/masks_V3_pipeline_3h
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:44|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
    Select the type of image to save:Image
    Select the image to save:Cell_DNA
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:DNA
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop/Pilot_Study/masks_V3_pipeline_3h
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:45|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
    Select the type of image to save:Image
    Select the image to save:Cell_Mito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mitochondria
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:Mito
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop/Pilot_Study/masks_V3_pipeline_3h
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
